OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)

0xc67a01dc Lua Stimulator => #0
  Lua Script = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Scenario_AcousticStimuli.lua
-> Display cue image
  Display images in full screen = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/cross.png
  Stimulation 1 = OVTK_StimulationId_Number_1D
  Cue Image 2 = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/end.PNG
  Stimulation 2 = OVTK_StimulationId_Number_1E
#0 -> Player Controller
  Stimulation name = OVTK_StimulationId_Number_1F
  Action to perform = Stop
#0 -> Sound Player "1"
  PLAY trigger = OVTK_StimulationId_Label_00
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FA_atasco.wav
  Loop = false
#0 -> Sound Player "4"
  PLAY trigger = OVTK_StimulationId_Label_06
  STOP trigger = OVTK_StimulationId_Label_07
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FA_ofensa.wav
  Loop = false
#0 -> Sound Player "2"
  PLAY trigger = OVTK_StimulationId_Label_02
  STOP trigger = OVTK_StimulationId_Label_03
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FA_estricto.wav
  Loop = false
#0 -> Sound Player "3"
  PLAY trigger = OVTK_StimulationId_Label_04
  STOP trigger = OVTK_StimulationId_Label_05
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FA_insultado.wav
  Loop = false
#0 -> Sound Player "5"
  PLAY trigger = OVTK_StimulationId_Label_08
  STOP trigger = OVTK_StimulationId_Label_09
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FD_abuso.wav
  Loop = false
#0 -> Sound Player "6"
  PLAY trigger = OVTK_StimulationId_Label_0A
  STOP trigger = OVTK_StimulationId_Label_0B
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FD_enganado.wav
  Loop = false
#0 -> Sound Player "7"
  PLAY trigger = OVTK_StimulationId_Label_0C
  STOP trigger = OVTK_StimulationId_Label_0D
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FD_monstruo.wav
  Loop = false
#0 -> Sound Player "8"
  PLAY trigger = OVTK_StimulationId_Label_0E
  STOP trigger = OVTK_StimulationId_Label_0F
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FD_torturado.wav
  Loop = false
#0 -> Sound Player "9"
  PLAY trigger = OVTK_StimulationId_Label_10
  STOP trigger = OVTK_StimulationId_Label_11
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FF_amenazado.wav
  Loop = false
#0 -> Sound Player "10"
  PLAY trigger = OVTK_StimulationId_Label_12
  STOP trigger = OVTK_StimulationId_Label_13
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FF_desmayo.wav
  Loop = false
#0 -> Sound Player "11"
  PLAY trigger = OVTK_StimulationId_Label_14
  STOP trigger = OVTK_StimulationId_Label_15
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FF_fantasma.wav
  Loop = false
#0 -> Sound Player "12"
  PLAY trigger = OVTK_StimulationId_Label_16
  STOP trigger = OVTK_StimulationId_Label_17
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FF_tristeza.wav
  Loop = false
#0 -> Sound Player "13"
  PLAY trigger = OVTK_StimulationId_Label_18
  STOP trigger = OVTK_StimulationId_Label_19
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FH_aglomeracion.wav
  Loop = false
#0 -> Sound Player "14"
  PLAY trigger = OVTK_StimulationId_Label_1A
  STOP trigger = OVTK_StimulationId_Label_1B
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FH_comico.wav
  Loop = false
#0 -> Sound Player "15"
  PLAY trigger = OVTK_StimulationId_Label_1C
  STOP trigger = OVTK_StimulationId_Label_1D
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FH_fantastico.wav
  Loop = false
#0 -> Sound Player "16"
  PLAY trigger = OVTK_StimulationId_Label_1E
  STOP trigger = OVTK_StimulationId_Label_1F
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FH_ternura.wav
  Loop = false
#0 -> Sound Player "17"
  PLAY trigger = OVTK_StimulationId_Number_00
  STOP trigger = OVTK_StimulationId_Number_01
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FN_acuatico.wav
  Loop = false
#0 -> Sound Player "18"
  PLAY trigger = OVTK_StimulationId_Number_02
  STOP trigger = OVTK_StimulationId_Number_03
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FN_desierto.wav
  Loop = false
#0 -> Sound Player "21"
  PLAY trigger = OVTK_StimulationId_Number_08
  STOP trigger = OVTK_StimulationId_Number_09
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FS_explosion.wav
  Loop = false
#0 -> Sound Player "19"
  PLAY trigger = OVTK_StimulationId_Number_04
  STOP trigger = OVTK_StimulationId_Number_05
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FN_hondo.wav
  Loop = false
#0 -> Sound Player "20"
  PLAY trigger = OVTK_StimulationId_Number_06
  STOP trigger = OVTK_StimulationId_Number_07
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FN_paella.wav
  Loop = false
#0 -> Sound Player "22"
  PLAY trigger = OVTK_StimulationId_Number_0A
  STOP trigger = OVTK_StimulationId_Number_0B
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FS_huracan.wav
  Loop = false
#0 -> Sound Player "23"
  PLAY trigger = OVTK_StimulationId_Number_0C
  STOP trigger = OVTK_StimulationId_Number_0D
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FS_mortal.wav
  Loop = false
#0 -> Sound Player "24"
  PLAY trigger = OVTK_StimulationId_Number_0E
  STOP trigger = OVTK_StimulationId_Number_0F
  File to play = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/Stimuli/16bit_ori_FS_relajacion.wav
  Loop = false
Acquisition client => #27
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Signal=#27.Signal stream, Stimulation=#0 -> GDF file writer
  Filename = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/AcousticStimuli (Lua coding)/GDF_Files/GDF_AcousticStim_[$core{date}-$core{time}].gdf
Data=#27.Signal stream, Stimulations=#0 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 2
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
