OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)

Clock stimulator
  Interstimulation interval (in sec) = 2
  Stimulation = OVTK_StimulationId_Label_02
-> Stimulation Filter => #1
  Default action = Select
  Time range begin = 10
  Time range end = 20
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_Label_02
  Stimulation range end = OVTK_StimulationId_Label_02
Keyboard stimulator => #2
  Filename = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/KeyBoardVisualStimuliTopographicMaps/keyboard.txt
Input stimulations 1=#1, Input stimulations 2=#2 -> Stimulation multiplexer
-> Display cue image => #4
  Display images in full screen = false
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_Label_03
  Cue Image 1 = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/KeyBoardVisualStimuliTopographicMaps/neuron-microglia.jpg
  Stimulation 1 = OVTK_StimulationId_Label_02
#2 -> Player Controller
  Stimulation name = OVTK_StimulationId_Label_05
  Action to perform = Stop
Clock stimulator => #6
  Interstimulation interval (in sec) = 1.5
  Stimulation = OVTK_StimulationId_Label_01
Input stimulations 1=#4, Input stimulations 2=#6 -> Stimulation multiplexer => #7
Acquisition client => #8
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input Signal=#8.Signal stream, Input Stimulations=#7 -> Generic stream writer
  Filename = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/KeyBoardVisualStimuliTopographicMaps/KeyBoardVisual_[$core{date}-$core{time}].ov
  Use compression = false
#8.Signal stream -> Temporal Filter => #10
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 20
Data=#10, Stimulations=#7 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#8.Signal stream, Stimulation=#7 -> GDF file writer
  Filename = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/KeyBoardVisualStimuliTopographicMaps/KeyBoardVisual_[$core{date}-$core{time}].gdf
