OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
Comment
  Filter within the alpha band (8-12 Hz)

  Theta (4-8 Hz)
  Beta (12-30 Hz)
  Gamma (30-100 Hz)
  Delat (1-4 Hz)

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Temporal Filter => #2
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> 3D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 0.05
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#0.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Electrode localisation file reader => #6
  Filename = ${AdvancedViz_ChannelLocalisation}
Signal=#2, Channel localization=#6 -> 2D topographic map
  Interpolation type = Spline (potentials)
  Delay (in s) = 0
