OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
Comment
  Filter within the alpha band (8-12 Hz)

  Theta (4-8 Hz)
  Beta (12-30 Hz)
  Gamma (30-100 Hz)
  Delta (1-4 Hz)

Generic stream reader => #0
  Filename = C:/Program Files/openvibe-3.4.0-64bit/share/openvibe/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Reference Channel => #1
  Channel = Nz
  Channel Matching Method = Smart
Data=#1 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
Data=#3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> 3D Topography
  Channel Localisation = C:/Program Files/openvibe-3.4.0-64bit/share/openvibe/plugins/cartesian.txt
  Gain = 0.05
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
Signal=#1 -> GDF file writer
  Filename = C:/Users/mathi/OneDrive/Documents/Job/GitHub/OpenVibe (Lua)/KeyBoardVisualStimuliTopographicMaps/TopographicMaps_[$core{date}-$core{time}].gdf
Electrode localisation file reader => #7
  Filename = C:/Program Files/openvibe-3.4.0-64bit/share/openvibe/plugins/cartesian.txt
Signal=#3, Channel localization=#7 -> 2D topographic map
  Interpolation type = Spline (potentials)
  Delay (in s) = 0
